PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Memory retrieval task _Individual Project
  keyboardBackend = ioHub
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Routines
  Routine welcome_screen
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome to our test 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank
    TextComponent textthank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank You 
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine test_trial
    TextComponent textTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_word
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    KeyboardComponent keyTest
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get Ready for the test
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    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine study_trial
    TextComponent textstudy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stim_word
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Flow
  Routine welcome_screen
  LoopInitiator trialsStudy loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'cliff'},
      {'stim_word': 'burger'},
      {'stim_word': 'window'},
      {'stim_word': 'gift'},
      {'stim_word': 'lonely'},
      {'stim_word': 'machine'}]
    Routine study_trial
  LoopTerminator trialsStudy
  Routine instructions
  LoopInitiator trialsTest loopType="TrialHandler"
    conditionsFile = test word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'cliff', 'old_new': 'old'},
      {'stim_word': 'burger', 'old_new': 'old'},
      {'stim_word': 'window', 'old_new': 'old'},
      {'stim_word': 'gift', 'old_new': 'old'},
      {'stim_word': 'lonely', 'old_new': 'old'},
      {'stim_word': 'machine', 'old_new': 'old'},
      {'stim_word': 'android', 'old_new': 'new'},
      {'stim_word': 'butter', 'old_new': 'new'},
      {'stim_word': 'country', 'old_new': 'new'},
      {'stim_word': 'flower', 'old_new': 'new'}]
    Routine test_trial
  LoopTerminator trialsTest
  Routine thank
